PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Experiment vs 2
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie = C:/Users/karin/Downloads/_סרטון לניסוי גרסא 2 (כולל ממשק  ללא ממשק) סופיייייייי (1).mp4
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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Flow
  Routine trial
